<?xml version="1.0" encoding="UTF-8"?>
<configuration>
    <version>2</version>

    <readers>
        <reader>
            <dll>gadgetron_core_readers</dll>
            <classname>AcquisitionReader</classname>
        </reader>
        <reader>
            <dll>gadgetron_core_readers</dll>
            <classname>WaveformReader</classname>
        </reader>
    </readers>

    <writers>
        <writer>
            <dll>gadgetron_core_writers</dll>
            <classname>ImageWriter</classname>
        </writer>
    </writers>

    <stream>
        <external>
            <execute name="simple_recon" type="python"/>

            <!-- The configuration is sent to the external process. It's left pretty empty here. -->
            <configuration/>
        </external>

        <gadget>
            <name>Extract</name>
            <dll>gadgetron_mricore</dll>
            <classname>ExtractGadget</classname>
        </gadget>

        <gadget>
            <name>Autoscale</name>
            <dll>gadgetron_mricore</dll>
            <classname>AutoScaleGadget</classname>
        </gadget>

        <gadget>
            <name>FloatToShort</name>
            <dll>gadgetron_mricore</dll>
            <classname>FloatToUShortGadget</classname>
        </gadget>
    </stream>
</configuration>
