<?xml version="1.0" encoding="UTF-8"?>
<gadgetronStreamConfiguration xsi:schemaLocation="http://gadgetron.sf.net/gadgetron gadgetron.xsd"
        xmlns="http://gadgetron.sf.net/gadgetron"
        xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance">

    <gadget>
      <name>NoiseAdjust</name>
      <dll>pingvin_mricore</dll>
      <classname>NoiseAdjustGadget</classname>
      <property><name>scale_only_channels_by_name</name><value>uncombined_channels_by_name@PCA</value></property>
    </gadget>


    <gadget>
      <name>PCA</name>
      <dll>pingvin_mricore</dll>
      <classname>PCACoilGadget</classname>
      <property><name>uncombined_channels_by_name</name><value>Loop_7:L7</value></property>

      <!-- present_uncombined_channels will get updated by the gadget based on the attached coils -->
      <property><name>present_uncombined_channels</name><value>0</value></property>
    </gadget>

    <gadget>
      <name>CoilReduction</name>
      <dll>pingvin_mricore</dll>
      <classname>CoilReductionGadget</classname>
      <property><name>coils_out</name><value>16</value></property>
    </gadget>

    <!-- RO asymmetric echo handling -->
    <gadget>
        <name>AsymmetricEcho</name>
        <dll>pingvin_mricore</dll>
        <classname>AsymmetricEchoAdjustROGadget</classname>
    </gadget>

    <gadget>
      <name>RemoveROOversampling</name>
      <dll>pingvin_mricore</dll>
      <classname>RemoveROOversamplingGadget</classname>
    </gadget>

    <gadget>
      <name>Grappa</name>
      <dll>pingvin_grappa</dll>
      <classname>GrappaGadget</classname>
      <!-- After PCA gadget, the device channel with be the first channel -->
      <!--
      <property><name>uncombined_channels</name><value>0</value></property>
      -->
      <property><name>device_channels</name><value>present_uncombined_channels@PCA</value></property>
      <property><name>use_gpu</name><value>false</value></property>
    </gadget>

    <gadget>
      <name>GrappaUnmixing</name>
      <dll>pingvin_grappa</dll>
      <classname>GrappaUnmixingGadget</classname>
    </gadget>

     <gadget>
      <name>Extract</name>
      <dll>pingvin_mricore</dll>
      <classname>ExtractGadget</classname>
    </gadget>

    <gadget>
      <name>AutoScale</name>
      <dll>pingvin_mricore</dll>
      <classname>AutoScaleGadget</classname>
    </gadget>

    <gadget>
      <name>FloatToShort</name>
      <dll>pingvin_mricore</dll>
      <classname>FloatToUShortGadget</classname>
    </gadget>

    <gadget>
      <name>DeviceChannelSplitter</name>
      <dll>pingvin_interventional_mri</dll>
      <classname>DeviceChannelSplitterGadgetUSHORT</classname>
    </gadget>

</gadgetronStreamConfiguration>
