<?xml version="1.0" encoding="UTF-8"?>
<gadgetronStreamConfiguration xsi:schemaLocation="http://gadgetron.sf.net/gadgetron gadgetron.xsd"
        xmlns="http://gadgetron.sf.net/gadgetron"
        xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance">

    <reader>
        <slot>1008</slot>
        <dll>gadgetron_mricore</dll>
        <classname>GadgetIsmrmrdAcquisitionMessageReader</classname>
    </reader>
    <reader>
        <slot>1026</slot>
        <dll>gadgetron_mricore</dll>
        <classname>GadgetIsmrmrdWaveformMessageReader</classname>
    </reader>

    <writer>
      <slot>1022</slot>
      <dll>gadgetron_mricore</dll>
      <classname>MRIImageWriter</classname>
    </writer>

    <gadget>
      <name>NoiseAdj</name>
      <dll>gadgetron_python</dll>
      <classname>PythonGadget</classname>
      <property><name>python_module</name>                <value>tpat_snr_scale</value></property>
      <property><name>python_class</name>                <value>NoiseAdj</value></property>
    </gadget>

    <gadget>
      <name>RemOS</name>
      <dll>gadgetron_python</dll>
      <classname>PythonGadget</classname>
      <property><name>python_module</name>                <value>tpat_snr_scale</value></property>
      <property><name>python_class</name>                <value>RemOS</value></property>
    </gadget>

    <gadget>
      <name>PCA</name>
      <dll>gadgetron_python</dll>
      <classname>PythonGadget</classname>
      <property><name>python_module</name>                <value>tpat_snr_scale</value></property>
      <property><name>python_class</name>                <value>PCA</value></property>
    </gadget>

    <gadget>
      <name>CoilReduce</name>
      <dll>gadgetron_python</dll>
      <classname>PythonGadget</classname>
      <property><name>python_module</name>                <value>tpat_snr_scale</value></property>
      <property><name>python_class</name>                <value>CoilReduce</value></property>
    </gadget>

    <gadget>
      <name>Recon</name>
      <dll>gadgetron_python</dll>
      <classname>PythonGadget</classname>
      <property><name>python_module</name>                <value>tpat_snr_scale</value></property>
      <property><name>python_class</name>                 <value>Recon</value></property>
      <property><name>pmri_method</name>                   <value>grappa</value></property>
    </gadget>

     <gadget>
      <name>Extract</name>
      <dll>gadgetron_mricore</dll>
      <classname>ExtractGadget</classname>
     </gadget>
  
    <gadget>
      <name>ImageFinish</name>
      <dll>gadgetron_mricore</dll>
      <classname>ImageFinishGadget</classname>
    </gadget>

</gadgetronStreamConfiguration>
