<?xml version="1.0" encoding="UTF-8"?>
<gadgetronStreamConfiguration xsi:schemaLocation="http://gadgetron.sf.net/gadgetron gadgetron.xsd"
        xmlns="http://gadgetron.sf.net/gadgetron"
        xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance">
         
    <reader>
      <slot>1008</slot>
      <dll>gadgetroncore</dll>
      <classname>GadgetIsmrmrdAcquisitionMessageReader</classname>
    </reader>

    <writer>
      <slot>1004</slot>
      <dll>gadgetroncore</dll>
      <classname>MRIImageWriterCPLX</classname>
    </writer>
    <writer>
      <slot>1005</slot>
      <dll>gadgetroncore</dll>
      <classname>MRIImageWriterFLOAT</classname>
    </writer>
    <writer>
      <slot>1006</slot>
      <dll>gadgetroncore</dll>
      <classname>MRIImageWriterUSHORT</classname>
    </writer>

    <gadget>
      <name>RemoveOversamplingPython</name>
      <dll>gadgetronpython</dll>
      <classname>AcquisitionPythonGadget</classname>
      <property><name>python_path</name>                  <value>/home/myuser/scripts/python</value></property>
      <property><name>python_module</name>                <value>remove_2x_oversampling</value></property>
      <property><name>gadget_reference_function</name>    <value>set_gadget_reference</value></property>
      <property><name>input_function</name>               <value>recon_function</value></property>
      <property><name>config_function</name>              <value>config_function</value></property>
    </gadget>

    <gadget>
      <name>AccReconPython</name>
      <dll>gadgetronpython</dll>
      <classname>AcquisitionPythonGadget</classname>
      <property><name>python_path</name>                  <value>/home/myuser/scripts/python</value></property>
      <property><name>python_module</name>                <value>accumulate_and_recon</value></property>
      <property><name>gadget_reference_function</name>    <value>set_gadget_reference</value></property>
      <property><name>input_function</name>               <value>recon_function</value></property>
      <property><name>config_function</name>              <value>config_function</value></property>
    </gadget>

    <gadget>
      <name>CoilCombinePython</name>
      <dll>gadgetronpython</dll>
      <classname>ImagePythonGadget</classname>
      <property><name>python_path</name>                  <value>/home/myuser/scripts/python</value></property>
      <property><name>python_module</name>                <value>rms_coil_combine</value></property>
      <property><name>gadget_reference_function</name>    <value>set_gadget_reference</value></property>
      <property><name>input_function</name>               <value>recon_function</value></property>
      <property><name>config_function</name>              <value>config_function</value></property>
    </gadget>

    <!--
    <gadget>
      <name>ImageViewPython</name>
      <dll>gadgetronpython</dll>
      <classname>ImagePythonGadget</classname>
      <property><name>python_path</name>                  <value>/home/myuser/scripts/python</value></property>
      <property><name>python_module</name>                <value>image_viewer</value></property>
      <property><name>gadget_reference_function</name>    <value>set_gadget_reference</value></property>
      <property><name>input_function</name>               <value>recon_function</value></property>
      <property><name>config_function</name>              <value>config_function</value></property>
    </gadget>
    -->

     <gadget>
      <name>Extract</name>
      <dll>gadgetroncore</dll>
      <classname>ExtractGadget</classname>
     </gadget>

     <gadget>
      <name>Autoscale</name>
      <dll>gadgetroncore</dll>
      <classname>AutoScaleGadget</classname>
     </gadget>
    
     <gadget>
      <name>FloatToShort</name>
      <dll>gadgetroncore</dll>
      <classname>FloatToUShortGadget</classname>
    </gadget>
  
    <gadget>
      <name>ImageFinishUSHORT</name>
      <dll>gadgetroncore</dll>
      <classname>ImageFinishGadgetUSHORT</classname>
    </gadget>

</gadgetronStreamConfiguration>
