<?xml version="1.0" encoding="utf-8"?>
<gadgetronStreamConfiguration xsi:schemaLocation="http://gadgetron.sf.net/gadgetron gadgetron.xsd"
        xmlns="http://gadgetron.sf.net/gadgetron"
        xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance">

    <!-- Noise prewhitening -->
    <gadget><name>NoiseAdjust</name><dll>pingvin_mricore</dll><classname>NoiseAdjustGadget</classname></gadget>
<!--
	<gadget>
		<name>PCA</name>
		<dll>pingvin_mricore</dll>
		<classname>PCACoilGadget</classname>
	</gadget>

	<gadget>
		<name>CoilReduction</name>
		<dll>pingvin_mricore</dll>
		<classname>CoilReductionGadget</classname>
		<property><name>coils_out</name><value>12</value></property>
	</gadget>
-->
    <!-- Data accumulation and trigger gadget -->
    <gadget>
        <name>AccTrig</name>
        <dll>pingvin_mricore</dll>
        <classname>AcquisitionAccumulateTriggerGadget</classname>
        <property><name>trigger_dimension</name><value>repetition</value></property>
        <property><name>sorting_dimension</name><value></value></property>
    </gadget>

    <gadget>
        <name>BucketToBuffer</name>
        <dll>pingvin_mricore</dll>
        <classname>BucketToBufferGadget</classname>
        <property><name>N_dimension</name><value>set</value></property>
        <property><name>S_dimension</name><value></value></property>
        <property><name>split_slices</name><value>false</value></property>
        <property><name>ignore_segment</name><value>true</value></property>
        <property><name>verbose</name><value>true</value></property>
    </gadget>

	<gadget>
		<name>gpuSpiralDeblurGadget</name>
		<dll>pingvin_spiral</dll>
		<classname>gpuSpiralDeblurGadget</classname>
		<property><name>deviceno</name><value>0</value></property>
		<property><name>buffer_convolution_kernel_width</name><value>8.5</value></property>
		<property><name>buffer_convolution_oversampling_factor</name><value>2</value></property>
		<property><name>reconstruction_os_factor_x</name><value>1</value></property>
		<property><name>reconstruction_os_factor_y</name><value>1</value></property>
	</gadget>


	<gadget>
		<name>Extract</name>
		<dll>pingvin_mricore</dll>
		<classname>ExtractGadget</classname>
        <property><name>extract_magnitude</name><value>true</value></property>
        <property><name>extract_real</name><value>true</value></property>
	</gadget>

	<!--<gadget>
		<name>AutoScaleGadget</name>
		<dll>pingvin_mricore</dll>
		<classname>AutoScaleGadget</classname>
	</gadget>

	<gadget>
		<name>FloatToShort</name>
		<dll>pingvin_mricore</dll>
		<classname>FloatToUShortGadget</classname>
	</gadget>-->

</gadgetronStreamConfiguration>
